// Runs a batch watershed on 8-bit images

// Build the input dialog
Dialog.create("Watershed masks");
Dialog.addDirectory("Image folder", "");
Dialog.addString("File suffix to segment:", "");
Dialog.show();

// Retrieve values
imageFolder = Dialog.getString();
pullSuffix = Dialog.getString();

// Ensure trailing separator
if (!endsWith(imageFolder, "/") && !endsWith(imageFolder, "\\"))
    imageFolder = imageFolder + "/";

// Debug: confirm what we got
print("Image folder: [" + imageFolder + "]");
print("Suffix: [" + pullSuffix + "]");

// Get list of files
fileList = getFileList(imageFolder);
print("Files found: " + fileList.length);

for (i = 0; i < fileList.length; i++) {
    filename = fileList[i];
    print("Working on " + filename);

    if (endsWith(filename, pullSuffix + ".tif") || endsWith(filename, pullSuffix + ".tiff")) {
        print("Processing: " + filename);

	open(imageFolder + filename);
	print("opening " + imageFolder + filename);
        // run("Bio-Formats Importer", "open=[" + imageFolder + filename + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
        getDimensions(width, height, channels, slices, frames);
	print(filename + " -> W:" + width + " H:" + height + " C:" + channels + " Z:" + slices + " T:" + frames);
	originalTitle = getTitle();
        // check bitdepth
        if (bitDepth() != 8) {
            print("Skipping (not 8-bit): " + filename);
            close();
            continue;
        }

	run("Multiply...", "value=255");
	run("Watershed");
	if (endsWith(filename, ".tiff"))
            outputName = replace(filename, ".tiff", "_watershed.tiff");
        else
            outputName = replace(filename, ".tif", "_watershed.tif");
    
    saveAs("Tiff", imageFolder + outputName);
    print("Saved to: " + outputName);
    close();
    }
}
print("Batch watershed complete!");